/*
 *
 * A neuroConstruct helper file of some simple utilities for checking the 
 * morphologies of cells loaded into NEURON
 * 
 * Some of these functions provide GENESIS like output, for comparing models in each simulator
 *
 */


/*
 * Provides information on the morphology of the current accessed section
 */
proc morph() {
 
totalarea = 0
print "Currently addressed section: ", secname()
print "++++++++++++++++++++++++++++++++++++++++++++++++++++++++"
print "+    Number of 3D info points: ", n3d()

for i=0,n3d()-1 print "+ ", secname(), " ", i, ": (", x3d(i), ", ", y3d(i), ", ", z3d(i), ") diam: ", diam3d(i)

print "++++++++++++++++++++++++++++++++++++++++++++++++++++++++"

print "+    Number of segments (nseg): ", nseg

for i=0,nseg+1{
    print "+ ", secname(), " ", i/(nseg+1), " diam: ", diam((i/(nseg+1))), " area: ", area((i/(nseg+1))), " um^2"
    totalarea = totalarea + area((i/(nseg+1)))
}
print "+    Total area: ", totalarea

print "++++++++++++++++++++++++++++++++++++++++++++++++++++++++"
}



/*
 * Provides information on the total area, etc. 
 * Useful as a simple test for comparing cells
 */
proc areainfo(){

totalnum = 0
totalarea = 0

forall totalnum = totalnum +1

print "++++++++++++++++++++++++++++++++++++++++++++++++++++++++"
print "+    Number of sections: ", totalnum

forall {

    totalsecarea = 0
    
    for i=0,n3d()-1 print "+ ", secname(), " ", i, ": (", x3d(i), ", ", y3d(i), ", ", z3d(i), ") diam: ", diam3d(i)

    for i=0,nseg+1{
        //print "+ ", secname(), " ", i/(nseg+1), " diam: ", diam((i/(nseg+1))), " area: ", area((i/(nseg+1))), " um^2"
        totalsecarea = totalsecarea + area((i/(nseg+1)))
    }
    print "+    Total section area in ",secname(), ": ", totalsecarea
    
    totalarea = totalarea + totalsecarea
}
    
    print "+"
    print "+    Total all sections: ", totalarea, " um^2"
    print "+    Total all sections: ", totalarea/(1000000*1000000), " m^2"
    print "+    Total all sections: ", totalarea/(10000*10000), " cm^2"


print "++++++++++++++++++++++++++++++++++++++++++++++++++++++++"
}


/*
 * Prints voltage of all of the created compartments
 */
proc allv(){
print "++++++++++++++++++++++++++++++++++++++++++++++++++++++++"
forall print secname(), ": ", v
print "++++++++++++++++++++++++++++++++++++++++++++++++++++++++"

}

/*
 * Provides information on the current section similar to that produced 
 * with "showfield *" in GENESIS
 */
proc gen() {

print "++++++++++++++++++++++++++++++++++++++++++++++++++++++++"

totalarea = 0
totalRa = 0


print ""
print secname()
print ""
print "Voltage        = ", v

for i=0,nseg+1{

    thisPoint = i/(nseg+1)
    nextPoint = (i+1)/(nseg+1)
    halfWay = thisPoint


    areaHere = area(halfWay)

    RaHere = ri(halfWay)

    print "  - Section from ", thisPoint, " to ", nextPoint, ", area: ", areaHere

    print "    Ra to end of this length = ", RaHere*1000, " ohm"


    totalarea = totalarea + areaHere
    if (i>0){
        totalRa = totalRa + RaHere
    }
}

print "Total area     = ", totalarea
print "Total Ra     = ", totalRa*1000 , " ohm"


print "++++++++++++++++++++++++++++++++++++++++++++++++++++++++"

}




/*
 * Provides information on the current section, like an expanded psection()
 */
proc secinfo() {

print "++++++++++++++++++++++++++++++++++++++++++++++++++++++++"

totalarea = 0
totalRa = 0


print ""
print secname()
print ""
print "Voltage        = ", v
print "nseg = ", nseg


for i=1,nseg+1{

    thisPoint = i/(nseg+1)
    nextPoint = (i+1)/(nseg+1)
    halfWay = thisPoint


    areaHere = area(halfWay)

    RaHere = ri(halfWay)

    print "  - Section from ", thisPoint, ", to ", nextPoint, ", area: ", areaHere

    print "    Ra             = ", RaHere*1000, " ohm"


    totalarea = totalarea + areaHere
    totalRa = totalRa + RaHere
}

print "Total area     = ", totalarea
print "Total Ra     = ", totalRa*1000 , " ohm (Note that this doesn't have any physical meaning)"


print "++++++++++++++++++++++++++++++++++++++++++++++++++++++++"

}
